PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent coin
      image [set every repeat] = data/Stim01.png
      size = (0.5, 0.5)
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.0
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      movie = data/coin010201.avi
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator learning loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'side1': 1, 'side2': 5},
      {'side1': 2, 'side2': 6},
      {'side1': 3, 'side2': 7},
      {'side1': 4, 'side2': 8}]
    Routine trial
  LoopTerminator learning
